CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:50
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Images are obtained by using PI for mitochondria, DAPI for nucleai and GFP for lysosoms.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Metadata modul currently is providing informationg on the Channel, Chemical and biological replicate with date. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Chemical>\w+)_(?P<Biorep>\w+)_(?P<Day>\w+)_(?P<Channel>\w+_\w+)_(?P<Well>\w+)_(?P<Site>\d+)_\.tif$
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module is distingushing between channels which picture coresponds to which organele. ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "MitoLyso_DAPI")
    Name to assign these images:Nuclei
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "MitoLyso_PI")
    Name to assign these images:Mito
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:Lys
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Mito
    Conversion method:Combine
    Image type:RGB
    Name the output image:GrayMito
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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
    Select the input image:Nuclei
    Conversion method:Combine
    Image type:RGB
    Name the output image:GrayNuclei
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:7|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
    Select the input image:Lys
    Conversion method:Combine
    Image type:RGB
    Name the output image:GrayLys
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
RescaleIntensity:[module_num:8|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
    Select the input image:GrayMito
    Name the output image:RescaleMito
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:9|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notes:['']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
    Select the input image:GrayLys
    Name the output image:RescaleIntensityLys
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:10|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
    Select the input image:GrayNuclei
    Name the output image:RescaleIntensityNuclei
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,1.0
    Intensity range for the output image:0.0,3
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
GaussianFilter:[module_num:11|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
    Select the input image:RescaleIntensityNuclei
    Name the output image:GaussianFilterNuclei
    Sigma:2

IdentifyPrimaryObjects:[module_num:12|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notes:['Find and outline nuclei']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
    Select the input image:GaussianFilterNuclei
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):27,82
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.9
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.2,1
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    Log transform before thresholding?:No
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
GaussianFilter:[module_num:13|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
    Select the input image:RescaleMito
    Name the output image:GaussianFilterMito
    Sigma:2

IdentifySecondaryObjects:[module_num:14|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notes:['Use Mito channel photo to outline where is the cytoplasm using nuclei as starting point and to name it cell.']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
    Select the input objects:Nuclei
    Name the objects to be identified:partialCells
    Select the method to identify the secondary objects:Watershed - Gradient
    Select the input image:GaussianFilterMito
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
GaussianFilter:[module_num:15|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
    Select the input image:RescaleIntensityLys
    Name the output image:GaussianFilterRescaleIntensityLyso
    Sigma:1

EnhanceOrSuppressFeatures:[module_num:16|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
    Select the input image:GaussianFilterRescaleIntensityLyso
    Name the output image:SuppressFeaturesLyso
    Select the operation:Suppress
    Feature size:3
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
IdentifySecondaryObjects:[module_num:17|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
    Select the input objects:partialCells
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:SuppressFeaturesLyso
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1
    Threshold correction factor:0.44
    Lower and upper bounds on threshold:0.38,1
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
IdentifyTertiaryObjects:[module_num:18|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notes:['Identify what is cell cytoplasm: cell minus nuclei.']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
    Select the larger identified objects:Cells
    Select the smaller identified objects:FilteredNuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

EnhanceOrSuppressFeatures:[module_num:19|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notes:['Enhance Mitochondria for counting speckles']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
    Select the input image:RescaleMito
    Name the output image:EnhanceMito
    Select the operation:Enhance
    Feature size:20
    Feature type:Neurites
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    Smoothing scale:2.0
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    Enhancement method:Line structures
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    Rescale result image:No

IdentifyPrimaryObjects:[module_num:20|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notes:['Count how many speckles are in Mitohondria. ', 'Adjusted tresholding for mitochondria from 1.0 to 1.4 to loose speckles that are not of interest (problems in the corners)']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
    Select the input image:EnhanceMito
    Name the primary objects to be identified:PunctaMito
    Typical diameter of objects, in pixel units (Min,Max):1,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.4
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
EnhanceOrSuppressFeatures:[module_num:21|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notes:['Towards counting lysosoms speckles, make sure we enhance them']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
    Select the input image:RescaleIntensityLys
    Name the output image:EnhanceLyso
    Select the operation:Enhance
    Feature size:11
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:22|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notes:['Identify and count lysosoms']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
    Select the input image:EnhanceLyso
    Name the primary objects to be identified:PunctaLyso
    Typical diameter of objects, in pixel units (Min,Max):1,22
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.0,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Median
    Variance method:Standard deviation
    # of deviations:2.0
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
RelateObjects:[module_num:23|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notes:['Assign mitochondria to apropriate cell cytoplasm.']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
    Parent objects:Cytoplasm
    Child objects:PunctaMito
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:Yes
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateMitoCyto
    Parent name:Cells

RelateObjects:[module_num:24|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
    Parent objects:Cells
    Child objects:PunctaMito
    Calculate child-parent distances?:Minimum
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateMitoCell
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
RelateObjects:[module_num:25|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notes:['Put each lysosomal puncta into the cytoplasm. ']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
    Parent objects:Cytoplasm
    Child objects:PunctaLyso
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateLysoCyto
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
RelateObjects:[module_num:26|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notes:['Trying to relate lysosomal puncta with nucleai and measure the distance or position between them.']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
    Parent objects:FilteredNuclei
    Child objects:PunctaLyso
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateLysoNuclei
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
RelateObjects:[module_num:27|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
    Parent objects:Cells
    Child objects:PunctaLyso
    Calculate child-parent distances?:Centroid
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelateLysoCell
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
OverlayOutlines:[module_num:28|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notes:['Make a generic image of the things detected by the cell profiler. Massive help with quality control but requires a lot of space later. ']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Nuclei
    Name the output image:LysobyCytoplasm
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:grey
    Select objects to display:Cells
    Select outline color:red
    Select objects to display:PunctaMito
    Select outline color:#80FF00
    Select objects to display:PunctaLyso
    Select outline color:Yellow
    Select objects to display:FilteredNuclei

SaveImages:[module_num:29|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notes:['Saving image generated by the previous overlay outlines modul.']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
    Select the type of image to save:Image
    Select the image to save:LysobyCytoplasm
    Select method for constructing file names:From image filename
    Select image name for file prefix:Lys
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder|test_out
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

MeasureObjectSizeShape:[module_num:30|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
    Select object sets to measure:Cells, Cytoplasm, FilteredNuclei, RelateLysoCell, RelateLysoCyto, RelateLysoNuclei, RelateMitoCell, RelateMitoCyto
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureImageAreaOccupied:[module_num:31|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
    Measure the area occupied by:Objects
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    Select object sets to measure:Cells, Cytoplasm, FilteredNuclei, RelateLysoCell, RelateLysoCyto, RelateLysoNuclei, RelateMitoCell, RelateMitoCyto

MeasureTexture:[module_num:32|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
    Select images to measure:GrayLys, GrayMito, GrayNuclei
    Select objects to measure:Cells
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureTexture:[module_num:33|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
    Select images to measure:GrayLys, GrayMito
    Select objects to measure:Cytoplasm
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureTexture:[module_num:34|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
    Select images to measure:GrayNuclei
    Select objects to measure:FilteredNuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureTexture:[module_num:35|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
    Select images to measure:GrayMito
    Select objects to measure:RelateMitoCell, RelateMitoCyto
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureTexture:[module_num:36|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
    Select images to measure:GrayLys
    Select objects to measure:RelateLysoCell, RelateLysoCyto, RelateLysoNuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

MeasureColocalization:[module_num:37|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
    Select images to measure:GrayLys, GrayMito
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureColocalization:[module_num:38|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
    Select images to measure:GrayMito, GrayNuclei
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureColocalization:[module_num:39|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
    Select images to measure:GrayLys, GrayNuclei
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:40|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
    Select images to measure:GrayNuclei
    Measure within objects?:Yes
    Select objects to measure:FilteredNuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:14

MeasureGranularity:[module_num:41|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
    Select images to measure:GrayMito
    Measure within objects?:Yes
    Select objects to measure:RelateMitoCell, RelateMitoCyto
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:20

MeasureGranularity:[module_num:42|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
    Select images to measure:GrayLys
    Measure within objects?:Yes
    Select objects to measure:RelateLysoCell, RelateLysoCyto, RelateLysoNuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:15

MeasureObjectIntensity:[module_num:43|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
    Select images to measure:GrayLys, GrayMito, GrayNuclei
    Select objects to measure:Cells

MeasureObjectIntensity:[module_num:44|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
    Select images to measure:GrayLys, GrayMito
    Select objects to measure:Cytoplasm

MeasureObjectIntensity:[module_num:45|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
    Select images to measure:GrayNuclei
    Select objects to measure:FilteredNuclei

MeasureObjectIntensity:[module_num:46|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
    Select images to measure:GrayMito
    Select objects to measure:RelateMitoCell, RelateMitoCyto

MeasureObjectIntensity:[module_num:47|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
    Select images to measure:GrayLys
    Select objects to measure:RelateLysoCell, RelateLysoCyto, RelateLysoNuclei

MeasureObjectIntensityDistribution:[module_num:48|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
    Select images to measure:GrayMito
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cytoplasm
    Object to use as center?:Edges of other objects
    Select objects to use as centers:FilteredNuclei
    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensityDistribution:[module_num:49|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
    Select images to measure:GrayLys
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cytoplasm
    Object to use as center?:Edges of other objects
    Select objects to use as centers:FilteredNuclei
    Scale the bins?:Yes
    Number of bins:4
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
ExportToSpreadsheet:[module_num:50|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:NEWfn_
    Overwrite existing files without warning?:No
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