CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:9
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Images are obtained by using PI for mitochondria, DAPI for nucleai and GFP for lysosoms.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Metadata modul currently is providing informationg on the Channel, Chemical and biological replicate with date. ']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Chemical>\w+)_(?P<Biorep>\w+)_(?P<Day>\w+)_(?P<Channel>\w+_\w+)_(?P<Well>\w+)_(?P<Site>\d+_\d+)
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module is distingushing between channels which picture coresponds to which organele. ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "MitoLyso_DAPI")
    Name to assign these images:Nuclei
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "MitoLyso_PI")
    Name to assign these images:Mito
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    Select the image type:Color image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "GFP")
    Name to assign these images:Lys
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    Select the image type:Color image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:Mito
    Conversion method:Combine
    Image type:RGB
    Name the output image:GrayMito
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:6|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
    Select the input image:Nuclei
    Conversion method:Combine
    Image type:RGB
    Name the output image:GrayNuclei
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
ColorToGray:[module_num:7|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
    Select the input image:Lys
    Conversion method:Combine
    Image type:RGB
    Name the output image:GrayLys
    Relative weight of the red channel:1.0
    Relative weight of the green channel:1.0
    Relative weight of the blue channel:1.0
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
MeasureImageQuality:[module_num:8|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:6
    Threshold count:1
    Select the images to measure:GrayLys, GrayMito, GrayNuclei
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:40
    Spatial scale for blur measurements:60
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:Yes
    Use all thresholding methods?:Yes
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
ExportToDatabase:[module_num:9|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
    Database type:MySQL
    Database name:the_qc_nocut
    Add a prefix to table names?:Yes
    Table prefix:the_qc_nocut
    Output file location:Default Output Folder|/DKED/scratch/mihat/image_analysis/2023-12-09_TRI/out
    Create a CellProfiler Analyst properties file?:Yes
    Database host:127.0.0.1:3307
    Username:mihat
    Password:tempsql
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    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
    Calculate the per-well mean values of object measurements?:No
    Calculate the per-well median values of object measurements?:No
    Calculate the per-well standard deviation values of object measurements?:No
    Export measurements for all objects to the database?:None
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:Yes
    Select the images for which you want to save thumbnails:GrayLys,GrayMito,GrayNuclei
    Auto-scale thumbnail pixel intensities?:No
    Select the plate type:96
    Select the plate metadata:Biorep
    Select the well metadata:Well
    Include information for all images, using default values?:Yes
    Properties image group count:2
    Properties group field count:1
    Properties filter field count:0
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    Experiment name:the_qc_nocut
    Which objects should be used for locations?:Nuclei
    Enter a phenotype class table name if using the Classifier tool in CellProfiler Analyst:
    Export object relationships?:No
    Overwrite without warning?:Data only
    Access CellProfiler Analyst images via URL?:No
    Select the classification type:Image
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    Do you want to add group fields?:No
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    Do you want to add filter fields?:No
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    Create a CellProfiler Analyst workspace file?:No
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